PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = narrative_recall_prolific
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine Welcome
    PolygonComponent bakground1_2
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[1.000,1.000,1.000]
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
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    ImageComponent logo1
      image = consent/NYUlogo.PNG
      pos = (0, 0.35)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent AgeQuestion
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome to this study!

        Press any key to continue.
    TextComponent chrome_rec
      color = black
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        ***You will need Chrome to run this experiment. If you are not using Chrome, please exit and launch again in Chrome.***

        ***Do not press ESC unless you want to leave this study without completing it!**
    KeyboardComponent key_18yoResp
      correctAns = $['y']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine informedconsent_1
    PolygonComponent bakground1_4
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[1.000,1.000,1.000]
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
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    ImageComponent consent3
      image = consent/Prolific_Consent_PART_1.png
      size = (1.1, 0.78)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = black
      letterHeight = 0.03
      pos = (0, 0.42)
      startVal [time (s)] = 0.0
      text = Please read the consent form carefully and press [a] to move to the next page of the form (pg. 1/5).
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    KeyboardComponent key_18yoResp_3
      allowedKeys [set every repeat] = 'a'
      correctAns = $['y']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine informedconsent_2
    PolygonComponent bakground1_5
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[1.000,1.000,1.000]
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
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    ImageComponent consent3_2
      image = consent/Prolific_Consent_PART_2.png
      size = (1.1, 0.78)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = black
      letterHeight = 0.03
      pos = (0, 0.42)
      startVal [time (s)] = 0.0
      text = Please read the consent form carefully and press [a] to move to the next page of the form (pg. 2/5)
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    KeyboardComponent key_18yoResp_4
      allowedKeys [set every repeat] = 'a'
      correctAns = $['y']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine informedconsent_3
    PolygonComponent bakground1_6
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[1.000,1.000,1.000]
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
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    ImageComponent consent3_3
      image = consent/Prolific_Consent_PART_3.png
      size = (1.1, 0.78)
      startVal [time (s)] = 0.0
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    TextComponent text_6
      color = black
      letterHeight = 0.03
      pos = (0, 0.42)
      startVal [time (s)] = 0.0
      text = Please read the consent form carefully and press [a] to move to the next page of the form (pg. 3/5)
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    KeyboardComponent key_18yoResp_5
      allowedKeys [set every repeat] = 'a'
      correctAns = $['y']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine soundCheck
    KeyboardComponent heard_sound
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        This experiment requires you to listen to stories. Let us test your sound output. You may use your computer speaker, headphones or earphones.

        This page is also testing your microphone. Please enable your microphone for this website if you are prompted to do so by your browser.

        Can you clearly hear a constant sound? If so, please press [spacebar] to continue. If you do not hear a sound, please make sure your volume is turned on and/or check your audio settings.
    MicrophoneComponent mic_check
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = Voice (16kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    SoundComponent sound_1
      sound = sound_check/sound_check.mp3
      startVal [time (s)] = 0.0
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  Routine task_instructions
    TextComponent general_instructions
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        PLEASE READ THESE INSTRUCTIONS CAREFULLY

        In this experiment, you will listen to two stories which range from 7 minutes to 15 minutes. After each story, you will be asked to recollect the story in as much detail as possible by speaking aloud. Your voice will be automatically recorded by your computer microphone. We ask that you describe the story in as much detail as you can and try to do so in the order in which you heard the story. Remembering the entire story in as much detail as possible will be more important than remembering the correct order. Therefore, feel free to return to any point you may have missed when recalling the story. Please do not engage in any other tasks while listening to the story, such as taking notes or texting.

        This data will be used for scientific purposes and we rely on your attention and diligent participation throughout the experiment. Thank you.

        Please press the [s] to hear the first story.
    KeyboardComponent continue_space
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine narrativeExposure
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = Please listen carefully!
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    SoundComponent story_1
      sound [set every repeat] = $stories
      startVal [time (s)] = 2
      syncScreenRefresh = False
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  Routine recall_instructions
    TextComponent instruction
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        PLEASE READ THESE INSTRUCTIONS CAREFULLY

        Next, we ask that you recall the story in as much detail as possible. We ask that you speak for at least 4 minutes, but longer is better. A green circle on the screen will turn yellow when 4 minutes have elapsed, but please continue to recall until you complete the story.

        Please try to recall the story in as much detail as possible and in the correct order. Please return to any point you may have missed. Your voice will be automatically recorded using your computer’s microphone.

        Once 4 minutes have passed AND you have completed recalling the complete story, you will say “I am done”, and then press [d] to complete your recording.

        Please press the [spacebar] to begin recalling the story.
    KeyboardComponent continue_space_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine verbalRecall
    TextComponent recording_in_progress
      color = 0.0000, 0.0000, 0.0000
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = RECORDING IN PROGRESS
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    TextComponent recall_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please recall the story in as much detail as possible.

        You must recall the story for at least four minutes (the green circle will turn yellow once two minutes have elapsed), but please continue beyond this time to complete your recollection of the story. Please say "I am done" and then press ['d'] when you are done recalling the entire story.
    PolygonComponent polygon
      fillColor = green
      pos = (0, -0.4)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    KeyboardComponent key_resp_2
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 240
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    PolygonComponent polygon_2
      fillColor = yellow
      pos = (0, -0.4)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 240
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    MicrophoneComponent mic_2
      channels = auto
      device = default
      maxSize = 24000
      outputType = wav
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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  Routine next_story_instuct
    TextComponent general_instructions_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Thank you!

        IF this is the first story you heard, you will now perform the same task but with a different story. Please listen carefully as you will once again be tested for your memory of the story.

        Otherwise, you will be given about 10 survey question before completing the experiment.

        Press the [r] to continue.
    KeyboardComponent continue_space_3
      allowedKeys = 'r'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine debreif
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participanting in the experiment!
        Your completion code is CN6D5JR1

        please press ESC to exit the experiment.
  Routine verbal_instructions
    TextComponent text_7
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        [Verbal Instructions]

        Make sure your volume is turned on. These verbal instructions will be followed by written instructions. Please be sure to pay close attention to both sets of instructions and any other written instructions throughout the task.

        After listening to these instructions, the experiment will continue automatically.
    SoundComponent sound_2
      sound = sound_check/verbal_instructions.mp3
      startVal [time (s)] = 10.0
      syncScreenRefresh = False
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  Routine suvey_Q2
    TextComponent text_9
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
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      text:
        How much do you like PsychoPy?

        [Please use you mouse to select a point on the slider. Once you click, you will recieve the next question so please pick carefully as you will not be able to change your answer]
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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  Routine Survey_Likert_Q2
    TextComponent text_11
      letterHeight = 0.055
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = I understood the task instructions.
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    TextComponent text_12
      letterHeight = 0.025
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text = [Please use you mouse to select a point (out of the five options) on the slider that best indicates your response to the statement above. Once you respond, a button will appear which you may click to move to the next question. Feel free to change your answer before moving on.]
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    SliderComponent slider_2
      forceEndRoutine = False
      granularity = 1
      labels = "Strongly disagree", "Disagree", "Neither agree nor disagree", "Agree", "Strongly agree"
      letterHeight = 0.025
      pos = (0, -.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent image_2
      image = consent/Click_to_continue.png
      pos = (.45, -.45)
      size = (0.3, 0.1)
      startVal [condition] = slider_2.rating
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    MouseComponent mouse_2
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = slider_2.rating
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  Routine Survey_Likert_Q3
    TextComponent text_13
      letterHeight = 0.035
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = I was engaged in the experiment. In other words, I payed close attention to the stories and took the task seriously [Please answer honestly, this will not affect your payment]
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    TextComponent text_14
      letterHeight = 0.025
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text = [Please use you mouse to select a point (out of the five options) on the slider that best indicates your response to the statement above. Once you respond, a button will appear which you may click to move to the next question. Feel free to change your answer as you wish before moving on.]
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    SliderComponent slider_3
      forceEndRoutine = False
      granularity = 1
      labels = "Strongly disagree", "Disagree", "Neither agree nor disagree", "Agree", "Strongly agree"
      letterHeight = 0.025
      pos = (0, -.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent image_3
      image = consent/Click_to_continue.png
      pos = (.45, -.45)
      size = (0.3, 0.1)
      startVal [condition] = slider_3.rating
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    MouseComponent mouse_3
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = slider_3.rating
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  Routine Survey_OpenEnded_Q1
    TextComponent text_15
      letterHeight = 0.04
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Did you use a particular strategy to memorize the story (e.g., imagining yourself in the story or simply paying close attention)?
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    TextComponent text_16
      letterHeight = 0.03
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text = [Please type below to response to the question above. Once you are done with your response, please press '9' on your keyboard to move on to the next question.]
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    TextboxComponent textbox_2
      bold = False
      editable = True
      letterHeight = 0.03
      pos = (0, -.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = DELETE THIS TEXT AND TYPE HERE
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    KeyboardComponent key_resp_3
      allowedKeys = '9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Survey_Likert_Q1
    TextComponent text_17
      letterHeight = 0.055
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = I found the experiment difficult.
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    TextComponent text_18
      letterHeight = 0.025
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text = [Please use you mouse to select a point (out of the five options) on the slider that best indicates your response to the statement above. Once you respond, a button will appear which you may click to move to the next question. Feel free to change your answer before moving on.]
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    SliderComponent slider_4
      forceEndRoutine = False
      granularity = 1
      labels = "Strongly disagree", "Disagree", "Neither agree nor disagree", "Agree", "Strongly agree"
      letterHeight = 0.025
      pos = (0, -.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent image
      image = consent/Click_to_continue.png
      pos = (.45, -.45)
      size = (0.3, 0.1)
      startVal [condition] = slider_4.rating
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    MouseComponent mouse
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = slider_4.rating
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  Routine Survey_OpenEnded_Q2
    TextComponent text_19
      letterHeight = 0.04
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Were there any moments in either story that you found particularly memorable? If so, please describe them below. 
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    TextComponent text_20
      letterHeight = 0.03
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text = [Please type below to response to the question above. Once you are done with your response, please press '9' on your keyboard to move on to the next question.]
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    TextboxComponent textbox_3
      bold = False
      editable = True
      letterHeight = 0.03
      pos = (0, -.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = DELETE THIS TEXT AND TYPE HERE
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    KeyboardComponent key_resp_4
      allowedKeys = '9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Survey_OpenEnded_Q3
    TextComponent text_21
      letterHeight = 0.04
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Is there anything you think we should know about your experience taking our experiment?
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    TextComponent text_22
      letterHeight = 0.03
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text = [Please type below to response to the question above. Once you are done with your response, please press '9' on your keyboard to move on to the next question.]
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    TextboxComponent textbox_4
      bold = False
      editable = True
      letterHeight = 0.03
      pos = (0, -.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = DELETE THIS TEXT AND TYPE HERE
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    KeyboardComponent key_resp_5
      allowedKeys = '9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Survey_OpenEnded_Q4
    TextComponent text_23
      letterHeight = 0.04
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Are you a native english speaker? That is, is english your first language?
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    TextComponent text_24
      letterHeight = 0.03
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text = [Please type below to response to the question above. Once you are done with your response, please press '9' on your keyboard to move on to the next question.]
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    TextboxComponent textbox_5
      bold = False
      editable = True
      letterHeight = 0.03
      pos = (0, -.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = DELETE THIS TEXT AND TYPE HERE
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    KeyboardComponent key_resp_6
      allowedKeys = '9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Survey_OpenEnded_Q5
    TextComponent text_25
      letterHeight = 0.04
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Do you speak any other languages besides English? If so, how many years have you spoken this language(s) and what is your level of fluency.
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    TextComponent text_26
      letterHeight = 0.03
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text = [Please type below to response to the question above. Once you are done with your response, please press '9' on your keyboard to move on to the next question.]
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    TextboxComponent textbox_6
      bold = False
      editable = True
      letterHeight = 0.03
      pos = (0, -.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = DELETE THIS TEXT AND TYPE HERE
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    KeyboardComponent key_resp_7
      allowedKeys = '9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Survey_OpenEnded_Q6
    TextComponent text_27
      letterHeight = 0.04
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = What were you doing while listening to the stories (e.g., only listening, browsing the internet, taking notes, etc.)? [Please answer honestly, your answer will not affect your payment]
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    TextComponent text_28
      letterHeight = 0.03
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text = [Please type below to response to the question above. Once you are done with your response, please press '9' on your keyboard to move on to the next question.]
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    TextboxComponent textbox_7
      bold = False
      editable = True
      letterHeight = 0.03
      pos = (0, -.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = DELETE THIS TEXT AND TYPE HERE
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    KeyboardComponent key_resp_8
      allowedKeys = '9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine informedconsent_4
    PolygonComponent bakground1_7
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[1.000,1.000,1.000]
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
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    ImageComponent consent3_4
      image = consent/Prolific_Consent_PART_4.png
      pos = (0, -.13)
      size = (1, 0.73)
      startVal [time (s)] = 0.0
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    TextComponent text_29
      color = black
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text:
        Please read the consent form (pg. 4/5) carefully.

        Please press [s] if you agree to the authorization statement below. This confirmation is equivalent to signing and dating the document.

        Otherwise, please exit the experiment now.
    KeyboardComponent key_18yoResp_6
      allowedKeys [set every repeat] = 's'
      correctAns = $['y']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine informedconsent_5
    PolygonComponent bakground1_8
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[1.000,1.000,1.000]
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
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    ImageComponent consent3_5
      image = consent/Prolific_Consent_PART_5.png
      pos = (0, -.15)
      size = (1, 0.73)
      startVal [time (s)] = 0.0
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    TextComponent text_30
      color = black
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text:
        Please read the consent form (pg. 5/5) carefully.

        Please press [s] if you agree to the statement below and cofirm that you are at least 18 years of age. This confirmation is equivalent to signing and dating the document.

        If you do not agree to participate or are not  at least 18 years of age, please exit the experiment now.
    KeyboardComponent key_18yoResp_7
      allowedKeys [set every repeat] = 's'
      correctAns = $['y']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Survey_prolific_ID
    TextComponent text_31
      letterHeight = 0.04
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = What is your Prolific ID?
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    TextComponent text_32
      letterHeight = 0.03
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text = [Please type below to response to the question above. Once you are done with your response, please press 'space' on your keyboard to move on.]
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    TextboxComponent textbox_8
      bold = False
      editable = True
      letterHeight = 0.03
      pos = (0, -.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = DELETE THIS TEXT AND TYPE HERE
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine Survey_prolific_ID
  Routine informedconsent_1
  Routine informedconsent_2
  Routine informedconsent_3
  Routine informedconsent_4
  Routine informedconsent_5
  Routine soundCheck
  Routine verbal_instructions
  Routine task_instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    Routine narrativeExposure
    Routine recall_instructions
    Routine verbalRecall
    Routine next_story_instuct
  LoopTerminator trials
  Routine Survey_Likert_Q1
  Routine Survey_Likert_Q2
  Routine Survey_Likert_Q3
  Routine Survey_OpenEnded_Q1
  Routine Survey_OpenEnded_Q2
  Routine Survey_OpenEnded_Q3
  Routine Survey_OpenEnded_Q4
  Routine Survey_OpenEnded_Q5
  Routine Survey_OpenEnded_Q6
  Routine debreif
